PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = familiarity_pretest_ENG
  Units = use prefs
  Screen = 1
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Routines
  Routine instructions_final
    TextComponent text_4
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you! Dziekujemy!

        Aby zakonczyc, nacisnij spacje.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions2
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Teraz na ekranie pojawi się słowo po polsku i jego dwie definicje. Twoim zadaniem będzie wskazać tę właściwą. W tym celu naciśnij:
        - klawisz '1', jeśli uważasz, że poprawna jest definicja pierwsza;
        - klawisz '2', jeśli uważasz, że poprawna jest definicja druga.
        Właściwy eksperyment poprzedzi sesja treningowa, w czasie której będziesz mieć okazję poćwiczyć.
        Aby przejść do sesji treningowej, prosimy nacisnąć spację.
  Routine trial2
    TextComponent target_POL
      text [set every repeat] = $word_POL
      pos = [0, 0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent ans_POL
      correctAns = $correct_ans_POL
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent target_POL_defA
      text [set every repeat] = '1: %s' % $A_POL
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target_POL_defB
      text [set every repeat] = $'2: %s' % $B_POL
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine training_session1
    TextComponent word_ENG_trial
      text [set every repeat] = $word_ENG_prac
      pos = [0, 0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = '1', '2'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent defA_ENG_trial
      text [set every repeat] = '1: %s' % $defA_prac
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent defB_ENG_trial
      text [set every repeat] = '2: %s' % $defB_prac
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine training_session2
    TextComponent word_POL_trial
      text [set every repeat] = $word_POL_prac
      pos = [0, 0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent defA_PL_trial
      text [set every repeat] = '1: %s' % $defA_POL_prac
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent defB_PL_trial
      text [set every repeat] = '2: %s' % $defB_POL_prac
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions2b
    TextComponent text_6
      text = Sesja treningowa dobiegła końca. Aby rozpocząć eksperyment prosimy nacisnąć spację.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent target_ENG
      color = black
      text [set every repeat] = $word_ENG
      pos = [0, 0.4]
      startVal [time (s)] = 0
      letterHeight = 0.1
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    KeyboardComponent ans_ENG
      correctAns = $correct_ans_ENG
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0
      store = all keys
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    TextComponent target_ENG_defA
      text [set every repeat] = '1: %s' % $defA_ENG
      pos = [0, -0.1]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent target_ENG_defB
      text [set every repeat] = '2: %s' % $defB_ENG
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions1b
    TextComponent text_7
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you! The English training session is over.

        Now we will begin the experiment. Please feel free to ask any questions at this time, or press SPACE to continue when you are ready.
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Hello! Thank you for participating in this test. We will begin with a practice session and trials in English, followed by practice and trials in Polish. If you have any questions during the practice sessions, please feel free to ask.

        On the screen, you will see a word followed by two definitions: 1 and 2. Please use the 1 and 2 number keys in the upper-left corner of the keyboard to indicate which definition is correct. Try to answer the questions as quickly as possible.

        If you are ready to continue, press SPACE.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine training_session
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0.0
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    TextComponent text_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any text

        including line breaks
Flow
  Routine instructions
  LoopInitiator practice_ENG loopType="TrialHandler"
    conditionsFile = practice_ENGPOL.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'value_defB_POL_prac': False, 'defA_POL_prac': u'Upadek warto\u015bci moralnych, spo\u0142ecznych lub kulturowych.', 'key_defB_ENG_prac': u'right', 'value_defA_POL': True, 'key_defA_POL': u'right', 'defB_POL_prac': u'Odci\u0119cie g\u0142owy podczas egzekucji lub wypadku.', 'word_POL_prac': u'dekadencja', 'key_defA_ENG_prac': u'left', 'key_defB_POL_prac': u'left', 'value_defA_ENG_prac': 2, 'defA_prac': u'A jet plane designed to fly very high.', 'word_ENG_prac': u'skyscraper', 'value_defB_ENG_prac': 1, 'defB_prac': u'A very tall building located in a city.'},
      {'value_defB_POL_prac': True, 'defA_POL_prac': u'Cz\u0142owiek dotkliwie odczuwaj\u0105cy wszelkie zmiany pogodowe.', 'key_defB_ENG_prac': u'right', 'value_defA_POL': False, 'key_defA_POL': u'right', 'defB_POL_prac': u'M\u0119\u017cczyzna odczuwaj\u0105cy g\u0142\u0119bok\u0105 niech\u0119\u0107 do kobiet.', 'word_POL_prac': u'mizogin', 'key_defA_ENG_prac': u'left', 'key_defB_POL_prac': u'left', 'value_defA_ENG_prac': 1, 'defA_prac': u'Colorful liquid and powder worn on the face.', 'word_ENG_prac': u'makeup', 'value_defB_ENG_prac': 2, 'defB_prac': u'Instructions for building furniture or other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,
      {'value_defB_POL_prac': False, 'defA_POL_prac': u'Ideologia g\u0142osz\u0105ca zniesienie wszelkiej warto\u015bci prywatnej.', 'key_defB_ENG_prac': u'right', 'value_defA_POL': True, 'key_defA_POL': u'right', 'defB_POL_prac': u'Wsp\xf3lne rz\u0105dy partii o odmiennych pogl\u0105dach.', 'word_POL_prac': u'komunizm', 'key_defA_ENG_prac': u'left', 'key_defB_POL_prac': u'left', 'value_defA_ENG_prac': 2, 'defA_prac': u'A person who has never played a game.', 'word_ENG_prac': u'newborn', 'value_defB_ENG_prac': 1, 'defB_prac': u'A very young baby who was just born.'},
      {'value_defB_POL_prac': True, 'defA_POL_prac': u'Rozpad cz\u0105stki zwi\u0105zku chemicznego lub pierwiastka.', 'key_defB_ENG_prac': u'right', 'value_defA_POL': False, 'key_defA_POL': u'right', 'defB_POL_prac': u'Zesp\xf3\u0142 symptom\xf3w zwi\u0105zany ze s\u0142ab\u0105 pami\u0119ci\u0105.', 'word_POL_prac': u'demencja', 'key_defA_ENG_prac': u'left', 'key_defB_POL_prac': u'left', 'value_defA_ENG_prac': 1, 'defA_prac': u'A national identification document which permits international travel.', 'word_ENG_prac': u'passport', 'value_defB_ENG_prac': 2, 'defB_prac': u'A government organization wh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
    Routine training_session1
  LoopTerminator practice_ENG
  Routine instructions1b
  LoopInitiator trials_ENG loopType="TrialHandler"
    conditionsFile = compound_list_psychopy.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'A_POL': u'kto\u015b kto stale si\u0119 czym\u015b chwali', 'correct_ans_ENG': 2, 'key_defA_ENG': u'left', 'correct_ans_POL': 1, 'defA_ENG': u'A severe burn on the hand or arm.', 'value_defB_ENG': True, 'value_defA_POL': True, 'value_defA_ENG': False, 'defB_ENG': u'A small gun carried by police or soldiers.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto lubi podlizywa\u0107 si\u0119 innym', 'value_defB_POL': False, 'word_POL': u'chwalipi\u0119ta', 'word_ENG': u'firearm'},
      {'A_POL': u'kto\u015b kto zbyt cz\u0119sto si\u0119 awanturuje', 'correct_ans_ENG': 1, 'key_defA_ENG': u'left', 'correct_ans_POL': 2, 'defA_ENG': u'A skin lotion used on hot sunny days.', 'value_defB_ENG': False, 'value_defA_POL': False, 'value_defA_ENG': True, 'defB_ENG': u'A large window cover used in a car.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto jest ci\u0105gle w ruchu', 'value_defB_POL': True, 'word_POL': u'p\u0119dziwiatr', 'word_ENG': u'sunscreen'},
      {'A_POL': u'kto\u015b kto du\u017co podr\xf3\u017cuje po \u015bwiecie', 'correct_ans_ENG': 2, 'key_defA_ENG': u'left', 'correct_ans_POL': 1, 'defA_ENG': u'A person repairing copy machines in an office.', 'value_defB_ENG': True, 'value_defA_POL': True, 'value_defA_ENG': False, 'defB_ENG': u'A person who uses unoriginal work at school.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto ma trudno\u015bci z chodzeniem', 'value_defB_POL': False, 'word_POL': u'w\u0142\xf3czykij', 'word_ENG': u'copycat'},
      {'A_POL': u'kto\u015b kto zas\u0142u\u017cy\u0142 na wieczne pot\u0119pienie', 'correct_ans_ENG': 1, 'key_defA_ENG': u'left', 'correct_ans_POL': 2, 'defA_ENG': u'Land with farms and villages outside the city.', 'value_defB_ENG': False, 'value_defA_POL': False, 'value_defA_ENG': True, 'defB_ENG': u'Law which is applied at a national level.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto du\u017co i cz\u0119sto narzeka', 'value_defB_POL': True, 'word_POL': u'm\u0119czydusza', 'word_ENG': u'countryside'}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
    Routine trial
  LoopTerminator trials_ENG
  Routine instructions2
  LoopInitiator practice_POL loopType="TrialHandler"
    conditionsFile = practice_ENGPOL.csv
    loopType = random
    nReps = 1
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    conditions:
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    Routine training_session2
  LoopTerminator practice_POL
  Routine instructions2b
  LoopInitiator trials_POL loopType="TrialHandler"
    conditionsFile = compound_list_psychopy.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'correctENG': 2, 'A_POL': u'kto\u015b kto stale si\u0119 czym\u015b chwali', 'key_defA_ENG': u'left', 'correct_ans_POL': 1, 'defA_ENG': u'A severe burn on the hand or arm.', 'value_defB_ENG': True, 'value_defA_POL': True, 'value_defA_ENG': False, 'defB_ENG': u'A small gun carried by police or soldiers.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto lubi podlizywa\u0107 si\u0119 innym', 'value_defB_POL': False, 'word_POL': u'chwalipi\u0119ta', 'word_ENG': u'firearm'},
      {'correctENG': 1, 'A_POL': u'kto\u015b kto zbyt cz\u0119sto si\u0119 awanturuje', 'key_defA_ENG': u'left', 'correct_ans_POL': 2, 'defA_ENG': u'A skin lotion used on hot sunny days.', 'value_defB_ENG': False, 'value_defA_POL': False, 'value_defA_ENG': True, 'defB_ENG': u'A large window cover used in a car.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto jest ci\u0105gle w ruchu', 'value_defB_POL': True, 'word_POL': u'p\u0119dziwiatr', 'word_ENG': u'sunscreen'},
      {'correctENG': 2, 'A_POL': u'kto\u015b kto du\u017co podr\xf3\u017cuje po \u015bwiecie', 'key_defA_ENG': u'left', 'correct_ans_POL': 1, 'defA_ENG': u'A person repairing copy machines in an office.', 'value_defB_ENG': True, 'value_defA_POL': True, 'value_defA_ENG': False, 'defB_ENG': u'A person who uses unoriginal work at school.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto ma trudno\u015bci z chodzeniem', 'value_defB_POL': False, 'word_POL': u'w\u0142\xf3czykij', 'word_ENG': u'copycat'},
      {'correctENG': 1, 'A_POL': u'kto\u015b kto zas\u0142u\u017cy\u0142 na wieczne pot\u0119pienie', 'key_defA_ENG': u'left', 'correct_ans_POL': 2, 'defA_ENG': u'Land with farms and villages outside the city.', 'value_defB_ENG': False, 'value_defA_POL': False, 'value_defA_ENG': True, 'defB_ENG': u'Law which is applied at a national level.', 'key_defA_POL': u'left', 'key_defB_POL': u'right', 'key_defB_ENG': u'right', 'B_POL': u'kto\u015b kto du\u017co i cz\u0119sto narzeka', 'value_defB_POL': True, 'word_POL': u'm\u0119czydusza', 'word_ENG': u'countryside'}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
    Routine trial2
  LoopTerminator trials_POL
  Routine instructions_final
