PsychoPy2experiment version="1.83.04"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = True
  Experiment info = {'participant':'', 'session':'001'}
  expName = priming_test
  Units = use prefs
  Screen = 1
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Routines
  Routine mask_trial_POL
    TextComponent masking1_4
      text = ##########
      stopVal [duration (s)] = 1
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent primePOLexp
      text [set every repeat] = $prime_exp_POL
      stopVal [duration (s)] = 0.05
      pos = [0, 0.2]
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent masking2_4
      text = ##########
      stopVal [duration (s)] = 1.0
      pos = [0, 0.2]
      startVal [time (s)] = 1.05
      letterHeight = 0.1
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  Routine instructions_POL
    TextComponent instruct_POL1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Część angielska eksperymentu dobiegła końca. Dziękujemy!

        Tak jak poprzednio właściwy eksperyment poprzedzi krótka sesja treningowa.
        Na ekranie pojawi się seria znaków ("########"), a następnie ciąg liter. Przy pomocy strzałek w LEWO oraz PRAWO prosimy zdecydować, czy litery tworzą słowo w języku polskim.
        Jeśli tak, prosimy nacisnąć strzałkę w lewo <-.
        Jeśli nie, prosimy nacisnąć strzałkę w prawo. ->.

        Aby przejść do sesji treningowej, prosimy nacisnąć spację.
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine mask_prac_POL
    TextComponent masking1_3
      text = ##########
      stopVal [duration (s)] = 1
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent primePOL
      text [set every repeat] = $prime_exp_POL_prac
      stopVal [duration (s)] = 0.05
      pos = [0, 0.2]
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent masking2_3
      text = ##########
      stopVal [duration (s)] = 1.0
      pos = [0, 0.2]
      startVal [time (s)] = 1.05
      letterHeight = 0.1
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  Routine trial_POL
    TextComponent trial_quesPOL
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
                   Is it a word?

        <- YES                     NO ->
    TextComponent trial_targetPOL
      text [set every repeat] = $compFull_POL
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent trial_ansPOL
      correctAns = $ans_POL
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'right'
      startVal [time (s)] = 0.0
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  Routine practice_POL
    TextComponent prac_quesPOL
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
                   Is it a word?

        <- YES                     NO ->
    TextComponent prac_targetPOL
      text [set every repeat] = $comp_POL_prac
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent prac_ansPOL
      correctAns = $ans_POL_prac
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'right'
      startVal [time (s)] = 0.0
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  Routine mask
    TextComponent masking1
      text = ##########
      stopVal [duration (s)] = 1
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent primeENG
      text [set every repeat] = $prime_exp_ENG_prac
      stopVal [duration (s)] = 0.05
      pos = [0, 0.2]
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent masking2
      text = ##########
      stopVal [duration (s)] = 1.0
      pos = [0, 0.2]
      startVal [time (s)] = 1.05
      letterHeight = 0.1
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  Routine trial_ENG
    TextComponent trial_quesENG
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
                   Is it a word?

        <- YES                     NO ->
    TextComponent trial_targetENG
      text [set every repeat] = $compFull_ENG
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent trial_ansENG
      correctAns = $ans_ENG
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'right'
      startVal [time (s)] = 0.0
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  Routine instructions_ENG_trial
    TextComponent instructions_ENG2
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        The practice session is over. We will now begin the experiment.

        If you have any questions at this time, please feel free to ask.

        Otherwise, if you are ready, please press SPACE to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thanks
    TextComponent thankyou
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you! The experiment is over.

        Bardzo dziękujemy za udział w eksperymencie!
  Routine instructions_ENG
    TextComponent instruct_ENG1
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Hello! Thank you for agreeing to participate in this study.

        The experiment will begin with a practice session and trials in English, followed by practice and trials in Polish. If you have any questions during the practice sessions, please feel free to ask.

        On the screen, you will see a series of hash marks ("########"), followed by a series of letters. Please use the LEFT and RIGHT arrow keys to indicate whether the letters form a real word in English.
        If it is a word, press LEFT <-. If it is not a word, press RIGHT ->.

        If you are ready to continue, please press SPACE.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions_POL_trial
    TextComponent instructions_POL_exp
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Sesja treningowa dobiegła końca.

        W przypadku jakichkolwiek wątpliwości, zachęcamy do zadawania pytań.

        Jeżeli wszystko jest jasne, prosimy nacisnąć spację w celu rozpoczęcia eksperymentu.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_ENG
    TextComponent prac_quesENG
      pos = [0, -0.4]
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
                   Is it a word?

        <- YES                     NO ->
    TextComponent prac_targetENG
      text [set every repeat] = $comp_ENG_prac
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent prac_ansENG
      correctAns = $ans_ENG_prac
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'right'
      startVal [time (s)] = 0.0
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  Routine mask_trial_ENG
    TextComponent masking1_2
      text = ##########
      stopVal [duration (s)] = 1
      pos = [0, 0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent primeENG_trial
      text [set every repeat] = $prime_exp_ENG
      stopVal [duration (s)] = 0.05
      pos = [0, 0.2]
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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    TextComponent masking2_2
      text = ##########
      stopVal [duration (s)] = 1.0
      pos = [0, 0.2]
      startVal [time (s)] = 1.05
      letterHeight = 0.1
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Flow
  Routine instructions_ENG
  LoopInitiator practice_EN loopType="TrialHandler"
    conditionsFile = priming_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'comp_ENG_prac': u'underground', 'prime_exp_POL_prac': u'murek', 'prime_exp_ENG_prac': u'sky', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'warta'},
      {'comp_ENG_prac': u'wallpaper', 'prime_exp_POL_prac': u'stopa', 'prime_exp_ENG_prac': u'floor', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'noga'},
      {'comp_ENG_prac': u'driveway', 'prime_exp_POL_prac': u'marka', 'prime_exp_ENG_prac': u'road', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'auto'},
      {'comp_ENG_prac': u'skateboard', 'prime_exp_POL_prac': u'nitka', 'prime_exp_ENG_prac': u'ski', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'ig?a'},
      {'comp_ENG_prac': u'cupcake', 'prime_exp_POL_prac': u'obrus', 'prime_exp_ENG_prac': u'bowl', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'talerz'},
      {'comp_ENG_prac': u'elentricity', 'prime_exp_POL_prac': u'pubros', 'prime_exp_ENG_prac': u'power', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'sto?ek'},
      {'comp_ENG_prac': u'camputer', 'prime_exp_POL_prac': u'remuk', 'prime_exp_ENG_prac': u'laptop', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'konik'},
      {'comp_ENG_prac': u'barbage', 'prime_exp_POL_prac': u'ponak', 'prime_exp_ENG_prac': u'bag', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'szachy'},
      {'comp_ENG_prac': u'instiration', 'prime_exp_POL_prac': u'bumak', 'prime_exp_ENG_prac': u'wall', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'hamak'},
      {'comp_ENG_prac': u'explaration', 'prime_exp_POL_prac': u'jatek', 'prime_exp_ENG_prac': u'question', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'karka'}]
    Routine mask
    Routine practice_ENG
  LoopTerminator practice_EN
  Routine instructions_ENG_trial
  LoopInitiator trial_EN loopType="TrialHandler"
    conditionsFile = priming_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'prime_exp_POL_prac': u'murek', 'prime_compRight_POL': u'suknia', 'ans_POL': u'left', 'compFull_ENG': u'airport', 'comp_POL_prac': u'warta', 'prime_exp_POL': u'podryw', 'prime_compFull_POL': u'podryw', 'prime_compRight_ENG': u'trade', 'ans_ENG': u'left', 'prime_exp_ENG': u'plane', 'prime_compFull_ENG': u'plane', 'compFull_POL': u'bawidamek'},
      {'prime_exp_POL_prac': u'stopa', 'prime_compRight_POL': u'palec', 'ans_POL': u'left', 'compFull_ENG': u'babysitter', 'comp_POL_prac': u'noga', 'prime_exp_POL': u'duma', 'prime_compFull_POL': u'duma', 'prime_compRight_ENG': u'chair', 'ans_ENG': u'left', 'prime_exp_ENG': u'parent', 'prime_compFull_ENG': u'parent', 'compFull_POL': u'chwalipi\u0119ta'},
      {'prime_exp_POL_prac': u'marka', 'prime_compRight_POL': u'czy\u015bciec', 'ans_POL': u'left', 'compFull_ENG': u'countryside', 'comp_POL_prac': u'auto', 'prime_exp_POL': u'rado\u015b\u0107', 'prime_compFull_POL': u'rado\u015b\u0107', 'prime_compRight_ENG': u'top', 'ans_ENG': u'left', 'prime_exp_ENG': u'top', 'prime_compFull_ENG': u'city', 'compFull_POL': u'hulajdusza'},
      {'prime_exp_POL_prac': u'nitka', 'prime_compRight_POL': u'piek\u0142o', 'ans_POL': u'left', 'compFull_ENG': u'daredevil', 'comp_POL_prac': u'ig\u0142a', 'prime_exp_POL': u'nuda', 'prime_compFull_POL': u'nuda', 'prime_compRight_ENG': u'hell', 'ans_ENG': u'left', 'prime_exp_ENG': u'hell', 'prime_compFull_ENG': u'risk', 'compFull_POL': u'j\u0119czydusza'}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
    Routine mask_trial_ENG
    Routine trial_ENG
  LoopTerminator trial_EN
  Routine instructions_POL
  LoopInitiator prac_PL loopType="TrialHandler"
    conditionsFile = priming_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'prime_exp_POL_prac': u'murek', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'warta', 'comp_ENG_prac': u'underground', 'prime_exp_ENG_prac': u'sky', 'ans_POL_prac': u'left'},
      {'prime_exp_POL_prac': u'stopa', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'noga', 'comp_ENG_prac': u'wallpaper', 'prime_exp_ENG_prac': u'floor', 'ans_POL_prac': u'left'},
      {'prime_exp_POL_prac': u'marka', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'auto', 'comp_ENG_prac': u'driveway', 'prime_exp_ENG_prac': u'road', 'ans_POL_prac': u'left'},
      {'prime_exp_POL_prac': u'nitka', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'ig\u0142a', 'comp_ENG_prac': u'skateboard', 'prime_exp_ENG_prac': u'ski', 'ans_POL_prac': u'left'},
      {'prime_exp_POL_prac': u'obrus', 'ans_ENG_prac': u'left', 'comp_POL_prac': u'talerz', 'comp_ENG_prac': u'cupcake', 'prime_exp_ENG_prac': u'bowl', 'ans_POL_prac': u'left'},
      {'prime_exp_POL_prac': u'pubros', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'sto\u0142ek', 'comp_ENG_prac': u'elentricity', 'prime_exp_ENG_prac': u'power', 'ans_POL_prac': u'right'},
      {'prime_exp_POL_prac': u'remuk', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'konik', 'comp_ENG_prac': u'camputer', 'prime_exp_ENG_prac': u'laptop', 'ans_POL_prac': u'right'},
      {'prime_exp_POL_prac': u'ponak', 'ans_ENG_prac': u'right', 'comp_POL_prac': u'szachy', 'comp_ENG_prac': u'barbage', 'prime_exp_ENG_prac': u'bag', 'ans_POL_prac': u'right'}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
    Routine mask_prac_POL
    Routine practice_POL
  LoopTerminator prac_PL
  Routine instructions_POL_trial
  LoopInitiator trials_PL loopType="TrialHandler"
    conditionsFile = priming_list.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'prime_exp_POL_prac': u'murek', 'prime_compRight_POL': u'suknia', 'ans_POL': u'left', 'compFull_ENG': u'airport', 'comp_POL_prac': u'warta', 'prime_exp_POL': u'podryw', 'prime_compFull_POL': u'podryw', 'prime_compRight_ENG': u'trade', 'ans_ENG': u'left', 'prime_exp_ENG': u'plane', 'prime_compFull_ENG': u'plane', 'compFull_POL': u'bawidamek'},
      {'prime_exp_POL_prac': u'stopa', 'prime_compRight_POL': u'palec', 'ans_POL': u'left', 'compFull_ENG': u'babysitter', 'comp_POL_prac': u'noga', 'prime_exp_POL': u'duma', 'prime_compFull_POL': u'duma', 'prime_compRight_ENG': u'chair', 'ans_ENG': u'left', 'prime_exp_ENG': u'parent', 'prime_compFull_ENG': u'parent', 'compFull_POL': u'chwalipi\u0119ta'},
      {'prime_exp_POL_prac': u'marka', 'prime_compRight_POL': u'czy\u015bciec', 'ans_POL': u'left', 'compFull_ENG': u'countryside', 'comp_POL_prac': u'auto', 'prime_exp_POL': u'rado\u015b\u0107', 'prime_compFull_POL': u'rado\u015b\u0107', 'prime_compRight_ENG': u'top', 'ans_ENG': u'left', 'prime_exp_ENG': u'top', 'prime_compFull_ENG': u'city', 'compFull_POL': u'hulajdusza'},
      {'prime_exp_POL_prac': u'nitka', 'prime_compRight_POL': u'piek\u0142o', 'ans_POL': u'left', 'compFull_ENG': u'daredevil', 'comp_POL_prac': u'ig\u0142a', 'prime_exp_POL': u'nuda', 'prime_compFull_POL': u'nuda', 'prime_compRight_ENG': u'hell', 'ans_ENG': u'left', 'prime_exp_ENG': u'hell', 'prime_compFull_ENG': u'risk', 'compFull_POL': u'j\u0119czydusza'}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
    Routine mask_trial_POL
    Routine trial_POL
  LoopTerminator trials_PL
  Routine thanks
